CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Project by Theresa Swayne to measure antibody binding in Cytation 5 immunofluorescence images']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:CY5
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,65
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.6
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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enabled:False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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:7|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
    Select images to measure:CY5
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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enabled:False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
    Select images to measure:CropBlue
    Select objects to measure:Nuclei, Cells, Cytoplasm

GrayToColor:[module_num:9|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notes:['Combine the channels into a color RGB image with higher weight for the Cy5']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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:CY5
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    Select the image to be colored blue:DAPI
    Name the output image:Merge
    Relative weight for the red image:1
    Relative weight for the green image:1
    Relative weight for the blue image:1
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:NucleiOnImage
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#FFFF00
    Select objects to display:Nuclei

Resize:[module_num:11|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notes:['Make the outline image smaller']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
    Select the input image:NucleiOnImage
    Name the output image:NucleiThumbnail
    Resizing method:Resize by a fraction or multiple of the original size
    X Resizing factor:0.4
    Y Resizing factor:0.4
    Z Resizing factor:0.4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

SaveImages:[module_num:12|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:NucleiThumbnail
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:13|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notes:['Export any measurements to a comma-delimited file (.csv). ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A-D_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
