CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['TODO: extract treatment using Regex', '', 'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Reads the first channel as "Red" (cytoplasmic protein of interest to be measured) and second channel as DAPI. ']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Red
    Channel number:2
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    Image name:DAPI

IdentifyPrimaryObjects:[module_num:6|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notes:['Identifies nuclei from DAPI channel']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:2
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identifies cytoplasm (whole cell area) in red channel by propagation from DAPI.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:Red
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure cytoplasm intensity in red channel']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
    Hidden:1
    Select an image to measure:Red
    Select objects to measure:Cytoplasm

MeasureObjectSizeShape:[module_num:9|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notes:['Measure cytoplasm area and shape']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
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Intensity_MeanIntensity_Red,Cytoplasm|Intensity_IntegratedIntensity_Red,Cytoplasm|AreaShape_Center_Y,Cytoplasm|AreaShape_Center_X,Cytoplasm|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:2019-03-01
    Overwrite existing files without warning?:No
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
GrayToColor:[module_num:11|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
    Select a color scheme:RGB
    Select the image to be colored red:Red
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    Select the image to be colored blue:DAPI
    Name the output image:RGBOriginal
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RGBOriginal
    Name the output image:IdentifiedObjects
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:green
    Select objects to display:Cytoplasm

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IdentifiedObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_objects
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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